PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = First Attempt at Part 3 Expt Script
  keyboardBackend = ioHub
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Routines
  Routine trial
    MovieComponent silentFilm
      backend = moviepy
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 55.0
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    TextComponent attendNote
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Attend to the music
    TextComponent dontAttendNote
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Do not attend to the music
    SoundComponent stimulus
      sound = $stimuli
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 30.0
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  Routine break_2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Well done, it's time for a five minute break.
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 8
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    Routine trial
  LoopTerminator trials
  Routine break_2
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 7
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    Routine trial
  LoopTerminator trials_2
